// ============================================================
// realtime_drift_mda_zstack.bsh
// Micro-Manager 1.4 real-time drift correction timelapse
// with per-position z-stack acquisition
//
// Based on realtime_drift_mda.bsh with z-stack support:
//   - Acquires n_z_slices per position per timepoint
//   - ECC drift correction uses one z-slice (raw_tl_z_index)
//   - All z-slices saved as img_{t}_ph_{z:03d}.tif
//
// Usage:
//   1. Run: python prepare_drift_session.py  (once before starting)
//   2. Open this file in MM Script Panel
//   3. Set CONFIG_FILE below to the drift_config_zstack.json path
//   4. Click Run
//   5. Click Stop to abort
// ============================================================

import java.io.*;
import java.util.*;
import java.text.*;
import ij.*;
import ij.process.*;
import ij.io.*;
import org.json.*;

// ============================================================
// Change only this: path to drift_config_zstack.json
// ============================================================
String CONFIG_FILE = "C:/Users/QPI/Documents/QPI_Omni/drift_session_261004_cells/drift_config_zstack.json";

// Resume to a different save directory (leave empty to use config's save_dir)
String RESUME_SAVE_DIR = "";

// Set to true to force start from T=0 even if previous state exists.
boolean FORCE_FRESH_START = false;
// ============================================================


// ---- Helper: zero-pad integer to given width ----
String padLeft(int n, int width) {
    String s = "" + n;
    while (s.length() < width) s = "0" + s;
    return s;
}

// ---- Helper: format double to N decimal places ----
String fmtD(double v, int decimals) {
    double factor = Math.pow(10, decimals);
    long rounded = Math.round(v * factor);
    String s = "" + Math.abs(rounded);
    while (s.length() <= decimals) s = "0" + s;
    String intPart  = s.substring(0, s.length() - decimals);
    String fracPart = s.substring(s.length() - decimals);
    String sign = (v < 0) ? "-" : "";
    return sign + intPart + "." + fracPart;
}


// ---- Load JSON config ----
print("Loading config: " + CONFIG_FILE);
BufferedReader cfgReader = new BufferedReader(new FileReader(CONFIG_FILE));
StringBuilder cfgSb = new StringBuilder();
String cfgLine;
while ((cfgLine = cfgReader.readLine()) != null) cfgSb.append(cfgLine);
cfgReader.close();
JSONObject cfg = new JSONObject(cfgSb.toString());

String PYTHON_EXE     = cfg.getString("python_exe");
String SCRIPT_DIR     = cfg.getString("script_dir");
String SAVE_DIR       = cfg.getString("save_dir");
if (RESUME_SAVE_DIR != null && !RESUME_SAVE_DIR.trim().isEmpty()) {
    SAVE_DIR = RESUME_SAVE_DIR.trim();
    print("Save dir overridden: " + SAVE_DIR);
}
String POSITIONS_CSV  = cfg.getString("positions_csv");
String STATE_FILE     = cfg.getString("state_file");
String LOG_FILE       = cfg.getString("log_file");
int    N_TIMEPOINTS   = cfg.getInt("n_timepoints");
long   INTERVAL_MS    = (long)(cfg.getDouble("interval_sec") * 1000);
long   SETTLE_MS      = (long)cfg.getDouble("settle_ms");
long   PFS_SETTLE_MS  = (long)cfg.getDouble("pfs_settle_ms");
double EXPOSURE_MS    = cfg.getDouble("exposure_ms");
int    BG_POS_INDEX   = cfg.getInt("bg_pos_index");
String XY_STAGE       = cfg.getString("xy_stage_device");
String Z_DEVICE       = cfg.getString("z_offset_device");
String CHANNEL_NAME   = cfg.getString("channel_name");
String CHANNEL_GROUP  = "TiChannel";
String COMPUTE_SCRIPT = SCRIPT_DIR + "/compute_drift_online.py";

// ---- Z-stack parameters (backward-compat defaults: single slice) ----
int    N_Z_SLICES  = cfg.optInt("n_z_slices", 1);
double Z_STEP_UM   = cfg.optDouble("z_step_um", 0.4);
double Z_START_UM  = cfg.optDouble("z_start_um", 0.0);

print("Config loaded: N=" + N_TIMEPOINTS + " interval=" + (INTERVAL_MS/1000) + "s");
print("Z-stack: " + N_Z_SLICES + " slices, start=" + fmtD(Z_START_UM, 1) +
      "um, step=" + fmtD(Z_STEP_UM, 1) + "um");

// ---- Load positions.csv ----
// Format: index,label,x,y,z_offset
ArrayList posLabels = new ArrayList();
double[]  baseX     = null;
double[]  baseY     = null;
double[]  baseZ     = null;

BufferedReader csvReader = new BufferedReader(new FileReader(POSITIONS_CSV));
String csvLine;
csvReader.readLine();  // skip header
ArrayList rows = new ArrayList();
while ((csvLine = csvReader.readLine()) != null) {
    String[] parts = csvLine.split(",");
    rows.add(parts);
}
csvReader.close();

int nPositions = rows.size();
baseX = new double[nPositions];
baseY = new double[nPositions];
baseZ = new double[nPositions];

for (int i = 0; i < nPositions; i++) {
    String[] parts = (String[])rows.get(i);
    posLabels.add(parts[1].trim());
    baseX[i] = Double.parseDouble(parts[2].trim());
    baseY[i] = Double.parseDouble(parts[3].trim());
    baseZ[i] = Double.parseDouble(parts[4].trim());
    print("  Pos[" + i + "] " + parts[1].trim() +
          " x=" + baseX[i] + " y=" + baseY[i] + " z=" + baseZ[i]);
}
print("Positions loaded: " + nPositions);

// ---- Corrected positions (base + cumulative correction) ----
double[] corrX = Arrays.copyOf(baseX, nPositions);
double[] corrY = Arrays.copyOf(baseY, nPositions);

// ---- Device timeout ----
mmc.setTimeoutMs(20000);
print("Device timeout set: 20000 ms");

// ---- Camera setup ----
mmc.setExposure(EXPOSURE_MS);
print("Exposure set: " + EXPOSURE_MS + " ms");

int bytesPerPx = (int)mmc.getBytesPerPixel();
print("Camera bit depth: " + (bytesPerPx * 8) + " bit"
      + "  (before the ph preset; the actual pixel type is used when saving)");

// ---- Helper: move stage and wait ----
void moveToPosition(int posIdx) {
    mmc.setXYPosition(XY_STAGE, corrX[posIdx], corrY[posIdx]);
    mmc.waitForDevice(XY_STAGE);
    Thread.sleep(SETTLE_MS);
    if (PFS_SETTLE_MS > 0) {
        Thread.sleep(PFS_SETTLE_MS);
    }
}

// ---- Helper: set channel to ph preset ----
void setChannelPh() {
    mmc.setConfig(CHANNEL_GROUP, CHANNEL_NAME);
    mmc.waitForConfig(CHANNEL_GROUP, CHANNEL_NAME);
}

// ---- Helper: snap image and save as TIFF ----
void snapAndSave(String savePath) {
    mmc.snapImage();
    Object rawImg = mmc.getImage();
    int width  = (int)mmc.getImageWidth();
    int height = (int)mmc.getImageHeight();
    // Dispatch on what the camera actually returned. bytesPerPx is queried at
    // startup, before the ph channel preset is applied, so it can disagree with
    // the live buffer (8 bit at startup, short[] after the preset switches the
    // camera to its 12-bit-in-16-bit mode).
    ImageProcessor ip;
    if (rawImg instanceof byte[]) {
        ip = new ByteProcessor(width, height, (byte[])rawImg, null);
    } else if (rawImg instanceof short[]) {
        ip = new ShortProcessor(width, height, (short[])rawImg, null);
    } else {
        throw new RuntimeException("Unsupported camera pixel type: " + rawImg.getClass());
    }
    ImagePlus imp = new ImagePlus("", ip);
    new FileSaver(imp).saveAsTiff(savePath);
}

// ---- Helper: read drift_state.txt (key=value format) ----
HashMap readState(String stateFile) {
    HashMap m = new HashMap();
    try {
        BufferedReader br = new BufferedReader(new FileReader(stateFile));
        String ln;
        while ((ln = br.readLine()) != null) {
            ln = ln.trim();
            if (ln.startsWith("#") || !ln.contains("=")) continue;
            String[] kv = ln.split("=", 2);
            m.put(kv[0].trim(), kv[1].trim());
        }
        br.close();
    } catch (Exception e) {
        print("[WARN] Failed to read state file: " + e.getMessage());
    }
    return m;
}

// ---- Helper: call Python subprocess with timeout ----
int callPython(String[] cmd, long timeoutMs) {
    Process p = Runtime.getRuntime().exec(cmd);

    final StringBuilder outBuf = new StringBuilder();
    final StringBuilder errBuf = new StringBuilder();
    Thread tOut = new Thread(new Runnable() {
        public void run() {
            try {
                BufferedReader r = new BufferedReader(new InputStreamReader(p.getInputStream()));
                String l;
                while ((l = r.readLine()) != null) outBuf.append(l).append("\n");
            } catch (Exception e) {}
        }
    });
    Thread tErr = new Thread(new Runnable() {
        public void run() {
            try {
                BufferedReader r = new BufferedReader(new InputStreamReader(p.getErrorStream()));
                String l;
                while ((l = r.readLine()) != null) errBuf.append(l).append("\n");
            } catch (Exception e) {}
        }
    });
    tOut.start();
    tErr.start();

    long start = System.currentTimeMillis();
    boolean done = false;
    int exitCode = -1;
    while (!done && System.currentTimeMillis() - start < timeoutMs) {
        Thread.sleep(500);
        try {
            exitCode = p.exitValue();
            done = true;
        } catch (IllegalThreadStateException e) {
            // still running
        }
    }
    if (!done) {
        p.destroy();
        print("[WARN] Python timeout (" + (timeoutMs/1000) + "s)");
        exitCode = -2;
    }
    tOut.join(2000);
    tErr.join(2000);

    if (outBuf.length() > 0) print("[Python stdout]\n" + outBuf.toString());
    if (errBuf.length() > 0) print("[Python stderr]\n" + errBuf.toString());
    return exitCode;
}


// ============================================================
// Main acquisition loop
// ============================================================
print("\n========================================");
print(" Real-time drift correction timelapse");
print(" N=" + N_TIMEPOINTS + "  interval=" + (INTERVAL_MS/1000) + "s");
print(" Z-stack: " + N_Z_SLICES + " slices (" +
      fmtD(Z_START_UM, 1) + " to " +
      fmtD(Z_START_UM + (N_Z_SLICES - 1) * Z_STEP_UM, 1) + " um)");
print("========================================\n");

String bgLabel  = (String)posLabels.get(BG_POS_INDEX);
print("BG Pos:  [" + BG_POS_INDEX + "] " + bgLabel);

double totalCorrX = 0.0;
double totalCorrY = 0.0;
int consecutiveFailures = 0;
int MAX_CONSECUTIVE_FAILURES = 5;

// ---- Resume detection ----
int startT = 0;
File stateFileObj = new File(STATE_FILE);
if (!FORCE_FRESH_START && stateFileObj.exists()) {
    HashMap resumeState = readState(STATE_FILE);
    String status = (String)resumeState.get("STATUS");
    String tpStr  = (String)resumeState.get("TIMEPOINT");
    if (tpStr != null && !"idle".equals(status)) {
        int lastTP = Integer.parseInt(tpStr);
        if (lastTP >= -1 && lastTP < N_TIMEPOINTS - 1) {
            startT = lastTP + 1;
            double fallbackDx = 0.0, fallbackDy = 0.0;
            try {
                fallbackDx = Double.parseDouble((String)resumeState.get("CUMULATIVE_DX_UM"));
                fallbackDy = Double.parseDouble((String)resumeState.get("CUMULATIVE_DY_UM"));
            } catch (Exception e) {}
            int nRestored = 0;
            double sumDx = 0.0, sumDy = 0.0;
            int nSample = 0;
            for (int i = 0; i < nPositions; i++) {
                double cdx = fallbackDx, cdy = fallbackDy;
                String sx = (String)resumeState.get("CUMULATIVE_DX_UM_" + i);
                String sy = (String)resumeState.get("CUMULATIVE_DY_UM_" + i);
                if (sx != null && sy != null) {
                    try {
                        cdx = Double.parseDouble(sx);
                        cdy = Double.parseDouble(sy);
                        nRestored++;
                    } catch (Exception e) {}
                }
                corrX[i] = baseX[i] - cdx;
                corrY[i] = baseY[i] - cdy;
                if (i != BG_POS_INDEX) {
                    sumDx += cdx;
                    sumDy += cdy;
                    nSample++;
                }
            }
            if (nSample > 0) {
                totalCorrX = -(sumDx / nSample);
                totalCorrY = -(sumDy / nSample);
            } else {
                totalCorrX = -fallbackDx;
                totalCorrY = -fallbackDy;
            }
            print("[RESUME] Resuming from T=" + startT +
                  "  per-Pos restored=" + nRestored + "/" + nPositions +
                  "  avgCum=(" + fmtD(-totalCorrX,3) + "," + fmtD(-totalCorrY,3) + ")um");
            print("[RESUME] Save dir: " + SAVE_DIR);
        }
    }
}
// ---- Ensure position subdirectories exist ----
for (int i = 0; i < nPositions; i++) {
    String pl = (String)posLabels.get(i);
    for (int z = 0; z < N_Z_SLICES; z++) {
        new File(SAVE_DIR + "/" + pl + "/z" + padLeft(z, 3)).mkdirs();
    }
}

// ---- Absolute timepoint grid ----
// Timepoint t is due at gridT0 + t*INTERVAL_MS. The wait at the end of a round
// targets the next slot on this grid, not "INTERVAL_MS from wherever this round
// happened to start". A round that overruns therefore delays only itself: the
// rounds after it pull back onto the 5-min grid as soon as one of them fits
// inside its slot again. The old relative wait pushed the whole schedule later
// by every overrun and never caught up.
// The anchor is the FIRST timepoint of the timelapse, not the moment this Run
// started: it is written to grid_t0.txt beside the state file on a fresh start
// and read back on resume, so stopping and resuming keeps timepoint t on the
// same absolute 5-min grid it had from T=0 (frame number -> wall time stays
// exact). Only a resume with no recorded anchor has to re-anchor, and it says so.
String GRID_T0_FILE = new File(STATE_FILE).getParent() + "/grid_t0.txt";
SimpleDateFormat gridFmt = new SimpleDateFormat("yyyy-MM-dd HH:mm:ss");
long gridT0 = 0;
if (startT > 0 && new File(GRID_T0_FILE).exists()) {
    BufferedReader gridReader = new BufferedReader(new FileReader(GRID_T0_FILE));
    String gridLine = gridReader.readLine();
    gridReader.close();
    try {
        gridT0 = Long.parseLong(gridLine.trim());
    } catch (Exception e) {
        print("[GRID] [WARN] " + GRID_T0_FILE + " is unreadable (" + gridLine + ")");
        gridT0 = 0;
    }
}
if (gridT0 > 0) {
    print("[GRID] Anchor from " + GRID_T0_FILE + ": T=0 at " + gridFmt.format(new Date(gridT0))
          + "  ->  T=" + startT + " due at "
          + gridFmt.format(new Date(gridT0 + (long)startT * INTERVAL_MS)));
} else {
    if (startT > 0) {
        print("[GRID] [WARN] No anchor recorded in " + GRID_T0_FILE + ". Re-anchoring the grid"
              + " at this resume: the 5-min spacing continues, but its phase shifts once here.");
    }
    gridT0 = System.currentTimeMillis() - (long)startT * INTERVAL_MS;
    PrintWriter gridWriter = new PrintWriter(new FileWriter(GRID_T0_FILE));
    gridWriter.println(gridT0);
    gridWriter.close();
    print("[GRID] Anchor written to " + GRID_T0_FILE + ": T=0 at " + gridFmt.format(new Date(gridT0)));
}

for (int t = startT; t < N_TIMEPOINTS; t++) {
    long tpStart = System.currentTimeMillis();
    long tpDue   = gridT0 + (long)t * INTERVAL_MS;
    long lateMs  = tpStart - tpDue;

    print("\n-- Timepoint " + t + " / " + (N_TIMEPOINTS-1) + " ----------------");
    print("  Start: " + new SimpleDateFormat("HH:mm:ss").format(new Date())
          + (lateMs > 1000 ? "  (" + fmtD(lateMs/1000.0,1) + "s late vs grid)" : "  (on grid)"));

    // ---- Acquire all positions ----
    setChannelPh();
    for (int i = 0; i < nPositions; i++) {
        String posLabel = (String)posLabels.get(i);
        moveToPosition(i);

        for (int z = 0; z < N_Z_SLICES; z++) {
            double zTarget = baseZ[i] + Z_START_UM + z * Z_STEP_UM;
            mmc.setPosition(Z_DEVICE, zTarget);
            mmc.waitForDevice(Z_DEVICE);

            String frameFile = "img_" + padLeft(t, 9) + "_ph_" + padLeft(z, 3) + ".tif";
            String savePath = SAVE_DIR + "/" + posLabel + "/z" + padLeft(z, 3) + "/" + frameFile;
            snapAndSave(savePath);
        }
        print("  [T=" + t + "] " + posLabel + " -> " + N_Z_SLICES + " z-slices");
    }
    moveToPosition(0);
    print("  Returned to Pos[0] (standby)");


    // ---- Drift computation (per-Pos corrections) ----
    if (t == 0) {
        print("  T=0: initializing reference frame...");
        String[] cmd = {
            PYTHON_EXE, COMPUTE_SCRIPT,
            "--timepoint", "0",
            "--config", CONFIG_FILE
        };
        int exitCode0 = callPython(cmd, 600000L);
        if (exitCode0 == 0) {
            HashMap state0 = readState(STATE_FILE);
            boolean anyJump0 = "true".equals(state0.get("JUMP_DETECTED"));
            int nValid0 = 0, nFail0 = 0;
            double sumDx0 = 0.0, sumDy0 = 0.0;
            for (int i = 0; i < nPositions; i++) {
                if (i == BG_POS_INDEX) continue;
                boolean vi = "true".equals(state0.get("CORRECTION_VALID_" + i));
                if (vi) {
                    try {
                        double cdx = Double.parseDouble((String)state0.get("CUMULATIVE_DX_UM_" + i));
                        double cdy = Double.parseDouble((String)state0.get("CUMULATIVE_DY_UM_" + i));
                        corrX[i] = baseX[i] - cdx;
                        corrY[i] = baseY[i] - cdy;
                        sumDx0 += cdx; sumDy0 += cdy;
                        nValid0++;
                    } catch (Exception e) { nFail0++; }
                } else {
                    nFail0++;
                }
            }
            if (nValid0 > 0) {
                double avgDx = sumDx0 / nValid0;
                double avgDy = sumDy0 / nValid0;
                corrX[BG_POS_INDEX] = baseX[BG_POS_INDEX] - avgDx;
                corrY[BG_POS_INDEX] = baseY[BG_POS_INDEX] - avgDy;
                totalCorrX = -avgDx;
                totalCorrY = -avgDy;
                print("  T=0: per-Pos pre-correction applied  valid=" + nValid0 +
                      "/" + (nPositions-1) + " fail=" + nFail0 +
                      "  avgCum=(" + fmtD(avgDx,3) + "," + fmtD(avgDy,3) + ")um");
            } else {
                print("  T=0: reference initialized (no valid Pos, jump=" + anyJump0 + ", no correction)");
            }
        } else {
            print("  T=0: reference initialized (Python failed, no correction)");
        }

    } else {
        print("  Python drift computation...");
        String[] cmd = {
            PYTHON_EXE, COMPUTE_SCRIPT,
            "--timepoint", String.valueOf(t),
            "--config",     CONFIG_FILE
        };
        int exitCode = callPython(cmd, 600000L);

        if (exitCode == 0) {
            HashMap state = readState(STATE_FILE);

            int nValid = 0, nFail = 0, nJump = 0;
            double sumDx = 0.0, sumDy = 0.0;
            double sumStepDx = 0.0, sumStepDy = 0.0;
            double sumCorr = 0.0;
            for (int i = 0; i < nPositions; i++) {
                if (i == BG_POS_INDEX) continue;
                String validStr = (String)state.get("CORRECTION_VALID_" + i);
                boolean vi = "true".equals(validStr);
                if (vi) {
                    try {
                        double cdx = Double.parseDouble((String)state.get("CUMULATIVE_DX_UM_" + i));
                        double cdy = Double.parseDouble((String)state.get("CUMULATIVE_DY_UM_" + i));
                        corrX[i] = baseX[i] - cdx;
                        corrY[i] = baseY[i] - cdy;
                        sumDx += cdx; sumDy += cdy;
                        try {
                            sumStepDx += Double.parseDouble((String)state.get("DX_UM_" + i));
                            sumStepDy += Double.parseDouble((String)state.get("DY_UM_" + i));
                            sumCorr   += Double.parseDouble((String)state.get("ECC_CORRELATION_" + i));
                        } catch (Exception e) {}
                        nValid++;
                    } catch (Exception e) { nFail++; }
                } else {
                    nFail++;
                    // Per-Pos failure: keep previous corrX[i]/corrY[i]
                }
            }

            if (nValid > 0) {
                double avgDx = sumDx / nValid;
                double avgDy = sumDy / nValid;
                corrX[BG_POS_INDEX] = baseX[BG_POS_INDEX] - avgDx;
                corrY[BG_POS_INDEX] = baseY[BG_POS_INDEX] - avgDy;
                totalCorrX = -avgDx;
                totalCorrY = -avgDy;
                double avgStepDx = sumStepDx / nValid;
                double avgStepDy = sumStepDy / nValid;
                double avgCorr   = sumCorr   / nValid;
                consecutiveFailures = 0;
                print("  [OK] valid=" + nValid + "/" + (nPositions-1) +
                      " fail=" + nFail +
                      "  avgStep=(" + fmtD(avgStepDx,3) + "," + fmtD(avgStepDy,3) + ")um" +
                      "  avgCorr=" + fmtD(avgCorr,3));
                print("  avgCumulative: x=" + fmtD(totalCorrX,3) + "um  y=" + fmtD(totalCorrY,3) + "um");
            } else {
                consecutiveFailures++;
                print("  [FAIL] All positions failed ECC (fail=" + nFail + ")");
            }

            if (consecutiveFailures >= MAX_CONSECUTIVE_FAILURES) {
                print("  [WARN] " + consecutiveFailures + " consecutive failures - check optics/sample");
            }

        } else {
            consecutiveFailures++;
            print("  [FAIL] Python exit code: " + exitCode);
        }
    }

    // ---- Wait for the next slot on the absolute grid ----
    long elapsed = System.currentTimeMillis() - tpStart;
    if (elapsed > INTERVAL_MS) {
        print("  [WARN] Round took " + fmtD(elapsed/1000.0,1) + "s, longer than the "
              + (INTERVAL_MS/1000) + "s interval.");
    }
    // Only slots that are still ahead count. If this round ran past the nominal
    // slot for t+1 -- an overrun, or a long stop before a resume -- advance by
    // whole intervals to the next slot that has not passed. Chasing the missed
    // slots back to back would fire several timepoints with no wait at all
    // (a two-hour stop would burn 24 of them), which is worse than the gap it
    // tries to close. Advancing by whole intervals keeps the phase, so every
    // acquisition still lands on the T=0 grid.
    long nowMs   = System.currentTimeMillis();
    long nextDue = gridT0 + (long)(t + 1) * INTERVAL_MS;
    if (nextDue <= nowMs) {
        long skipped = (nowMs - nextDue) / INTERVAL_MS + 1;
        nextDue += skipped * INTERVAL_MS;
        print("  [WARN] The T=" + (t+1) + " slot had already passed; waiting for the slot "
              + skipped + " interval(s) later instead of firing the missed ones back to"
              + " back. Timepoint numbering stays unbroken, so from here on frame number"
              + " and wall clock differ by that gap.");
    }
    long waitTimeMs = nextDue - nowMs;
    print("  Waiting " + fmtD(waitTimeMs / 1000.0, 1) + "s until T=" + (t+1)
          + " at " + new SimpleDateFormat("HH:mm:ss").format(new Date(nextDue)));

    long waitUntil = nextDue;
    boolean shownCountdown = false;
    while (System.currentTimeMillis() < waitUntil) {
        long remaining = waitUntil - System.currentTimeMillis();
        if (remaining < 10000 && !shownCountdown) {
            shownCountdown = true;
        }
        if (shownCountdown && remaining % 1000 < 100) {
            print("    " + (remaining / 1000 + 1) + "s remaining...");
        }
        Thread.sleep(200);
    }

    print("  Timepoint " + t + " done (" + fmtD(elapsed/1000.0,1) + "s)");
}

// ============================================================
// Done
// ============================================================
print("\n========================================");
print(" Timelapse complete (z-stack mode)");
print(" Total: " + N_TIMEPOINTS + " timepoints x " + N_Z_SLICES + " z-slices");
print(" Final avg cumulative correction (per-Pos mean): x=" + fmtD(totalCorrX,3) + "um  y=" + fmtD(totalCorrY,3) + "um");
print(" Saved to: " + SAVE_DIR);
print("========================================");
